#  Example ACQ4 configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray', 'tasklogic']

    # Devices are defined in another config file:
    #hardware: readConfigFile('devices.cfg')
    remoteport: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'darkorange.qss'

hardware:
    simpledummy:
        module.Class: 'simple_data_dummy.SimpleDummy'

    mykrowave:
        module.Class: 'microwave.mw_source_dummy.mwsourcedummy'
        gpib_address: 'dummy'
        gpib_timeout: 20
        mock: True

    mydummyscanner:
        module.Class: 'confocal_scanner_interface_dummy.ConfocalScannerInterfaceDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fit.fitlogic'

    mydummycounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        clock_channel: '/Dev1/Ctr0'
        clock_frequency: 100
        counter_channel: '/Dev1/Ctr1'
        photon_source: '/Dev1/PFI8'
        photon_source2: '/Dev1/PFI9'
        remoteaccess: True

    mydummyodmrcounter:
        module.Class: 'odmr_counter_interface_dummy.ODMRCounterInterfaceDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fit.fitlogic'

    mydummyfastcounter:
        module.Class: 'fast_counter_dummy.FastCounterDummy'

    mydummypulser:
        module.Class: 'pulser_interface_dummy.PulserInterfaceDummy'

    #mypulser:
    #    module.Class: 'awg.tektronix_awg70k.AWG70K'
    #    awg_IP_address: '134.60.46.170'
    #    awg_port: 4000

    mydummywavemeter:
        module.Class: 'wavemeter_interface_dummy.WavemeterInterfaceDummy'
        measurement_timing: 10

    mydummyswitch1:
        module.Class: 'switches.switch_dummy.SwitchDummy'

    mydummyswitch2:
        module.Class: 'switches.switch_dummy.SwitchDummy'

    myspectrometer:
        module.Class: 'spectrometer.spectrometer_dummy.SpectrometerInterfaceDummy'
        connect:
            fitlogic: 'fit.fitlogic'

    motordummy:
        module.Class: 'motor.motor_dummy.MotorDummy'

#    myawg:
#        module.Class: 'awg.tektronix_awg5002c.AWG5002C'
#        awg_IP_address: '10.54.4.47'
#        awg_port: 3000
#        default_sample_rate: 600e6  # in Samples/seconds
#        awg_ftp_path: 'C:/InetPub/ftproot' # this path cannot be retrieved otherwise.
#    fastcounter:
#        module.Class: 'picoquant.picoharp300.PicoHarp300'
#        deviceID: 0
#        mode:   0
#    microwaveSMR20:
#        module.Class: 'microwave.mw_source_smr20.MWSourceSMR20'
#    mypulseblaster:
#        module.Class: 'spincore.pulse_blaster_esrpro.PulseBlasterESRPRO'
#    mynicard:
#        module.Class: 'ni_card.NICard'
#        clock_channel: '/Dev2/Ctr0'
#        counter_channel: '/Dev2/Ctr1'
#        scanner_clock_channel: '/Dev2/Ctr2'
#        scanner_counter_channel: '/Dev2/Ctr3'
#        photon_source: '/Dev2/PFI8'
#        gate_in_channel: '/Dev2/PFI9'
#        odmr_trigger_channel: '/Dev2/PFI13'
#        scanner_ao_channels: '/Dev2/AO0:3'
#        clock_frequency: 100               # in Hz
#        scanner_clock_frequency: 100       # in Hz
#        x_range: 0, 200                    # in micrometer
#        y_range: 0, 200                    # in micrometer
#        z_range: -100, 100                 # in micrometer
#        a_range: 0, 200                    # 4th unused analog output of NI
#        voltage_range: -10, 10             # in volts
#        counting_edge_rising: True         # for gated counting, specify the edge
#        samples_number: 10                 # for gated counting
#
#    mynicard2:      # this NI card uses the slow counter interface for gated counting
#        module.Class: 'ni_card.NICard2'
#        photon_source: '/Dev2/PFI8'     # from here the photon counts are recorded
#        gate_in_channel: '/Dev2/PFI9'   # that is the trigger channel for the gate
#        counter_channel: '/Dev2/Ctr0'   # channel where counts are saved  
#        counting_edge_rising: True      # for gated counting, specify the edge
#        samples_number: 10              # for gated counting        
#
#    motor_micos:
#        module.Class: 'motor.motor_stage_micos.MotorStageMicos'
#        com_port_micos_xy:      ('COM8', 'x', 'y')   # choose com port and labels for axes
#        com_port_micos_zphi:    ('COM5', 'z', 'phi') # choose com port and labels for axes
#        micos_term_chars_xy:    '\n'
#        micos_term_chars_zphi:  '\n'
#        micos_baud_rate_xy:     57600
#        micos_baud_rate_zphi:   57600

logic:
    simplelogic:
        module.Class: 'simple_data_logic.SimpleDataLogic'
        connect:
            simpledata: 'simpledummy.simple'
    rkernel:
        module.Class: 'ipykernel.remotekernellogic.RemoteKernelLogic'
        remoteaccess: True

    sequencegenerator:
        module.Class: 'sequence_generator_logic.SequenceGeneratorLogic'
        prepared_methods: ['generate_rabi','generate_pulsedodmr','generate_xy8']
        connect:
            pulser: 'mydummypulser.pulser'

    pulseextraction:
        module.Class: 'pulse_extraction_logic.PulseExtractionLogic'
        connect:
            fastcounter: 'mydummyfastcounter.fastcounter'

    pulseanalysis:
        module.Class: 'pulse_analysis_logic.PulseAnalysisLogic'
        connect:
            pulseextractionlogic: 'pulseextraction.pulseextractionlogic'
            fitlogic: 'fit.fitlogic'

    pulsedmeasurement:
        module.Class: 'pulsed_measurement_logic.PulsedMeasurementLogic'
        connect:
            fastcounter: 'mydummyfastcounter.fastcounter'
            pulseanalysislogic: 'pulseanalysis.pulseanalysislogic'
            #pulsegenerator: 'pulsegenerator.pulsegenerator'
            fitlogic: 'fit.fitlogic'
            mykrowave: 'mykrowave.mwsourcedummy'
            savelogic: 'save.savelogic'
            scannerlogic: 'scanner.scannerlogic'
            optimizer1: 'optimizer.optimizerlogic'

    counter:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mydummycounter.counter'
            savelogic: 'save.savelogic'

    gatedcounter:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mydummycounter.counter'
            savelogic: 'save.savelogic'

    laserscanner:
        module.Class: 'laser_scanning_logic.LaserScanningLogic'
        logic_acquisition_timing: 20
        logic_update_timing: 100
        connect:
            wavemeter1: 'mydummywavemeter.highhinessewavemeter'
            savelogic: 'save.savelogic'
            counterlogic: 'counter.counterlogic'

    switch:
        module.Class: 'switch_logic.SwitchLogic'
        connect:
            switch1: 'mydummyswitch1.switch'
            switch2: 'mydummyswitch2.switch'

    scanner:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'mydummyscanner.confocalscanner'
            savelogic: 'save.savelogic'

    optimizer:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'mydummyscanner.confocalscanner'
            fitlogic: 'fit.fitlogic'

    poimanager:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scanner.scannerlogic'
            optimizer1: 'optimizer.optimizerlogic'
            savelogic: 'save.savelogic'

    odmr:
        module.Class: 'odmr_logic.ODMRLogic'
        connect:
            odmrcounter: 'mydummyodmrcounter.odmrcounter'
            fitlogic: 'fit.fitlogic'
            microwave1: 'mykrowave.mwsourcedummy'
            savelogic: 'save.savelogic'

    fit:
        module.Class: 'fit_logic.FitLogic'

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'
        tasks:
        #    dummytask:
        #        module: 'dummy'
        #        preposttasks: ['ppdummy']
        #    dummyinterruptor:
        #        module: 'dummy'
        #        pausetasks: ['dummytask']
        #        preposttasks: ['ppdummy2']
        #    ppdummy:
        #        module: 'prepostdummy'
        #    ppdummy2:
        #        module: 'prepostdummy'
            scannerLocationRefocus:
                module: 'refocus'
        #        preposttasks: ['fliplasermirror']
                pausetasks: ['scan', 'odmr']
                needsmodules:
                    optimizer: 'optimizer'
        #        config:
        #            initial: [1, 1, 1]
        #    fliplasermirror:
        #        module: 'flipmirror'
        #        needsmodules:
        #            switchlogic: 'switch'
        #        config:
        #            sequence: [('mydummyswitch1', 1, True), ('mydummyswitch1', 2, True), ('mydummyswitch2', 1, True)]

    save:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: '/$HOME/'

    spectrum:
        module.Class: 'spectrum.SpectrumLogic'
        connect:
            spectrometer: 'myspectrometer.spec'
            savelogic: 'save.savelogic'
            odmrlogic1: 'odmr.odmrlogic'

    magnet_logic:
        module.Class: 'magnet_logic.MagnetLogic'
        connect:
            magnetstage: 'motordummy.magnet'

    trace_analysis:
        module.Class: 'trace_analysis_logic.TraceAnalysisLogic'
        connect:
            counterlogic1: 'gatedcounter.counterlogic'
            savelogic: 'save.savelogic'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'
    man:
        module.Class: 'manager.managergui.ManagerGui'

    countergui:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counter.counterlogic'

    confocalgui:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scanner.scannerlogic'
            savelogic: 'save.savelogic'
            optimizerlogic1: 'optimizer.optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    #notebookgui:
    #    module.Class: 'notebook.notebookgui.NotebookWebView'
    #    connect:
    #        notebooklogic: 'kernellogic.kernel'

    laserscanninggui:
        module.Class: 'laserscanner.laserscangui.LaserScanningGui'
        connect:
            laserscanninglogic1: 'laserscanner.laserscanninglogic'
            savelogic: 'save.savelogic'
    switchgui:
        module.Class: 'switcher.switchgui.SwitchGui'
        connect:
            switchlogic: 'switch.switchlogic'
    poimanagergui:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic1: 'poimanager.poimanagerlogic'
            confocallogic1: 'scanner.scannerlogic'
    odmrgui:
        module.Class: 'odmr.odmrgui.ODMRGui'
        connect:
            odmrlogic1: 'odmr.odmrlogic'
            savelogic: 'save.savelogic'
    taskgui:
        module.Class: 'taskrunner.taskgui.TaskGui'
        connect:
            tasklogic: 'tasklogic.runner'
    spectrometergui:
        module.Class: 'spectrometer.spectrometergui.SpectrometerGui'
        connect:
            spectrumlogic1: 'spectrum.spectrumlogic'
    pulsedmeasurementgui:
        module.Class: 'pulsed.pulsed_maingui_simple.PulsedMeasurementGui'
        connect:
            pulsedmeasurementlogic: 'pulsedmeasurement.pulsedmeasurementlogic'
            sequencegeneratorlogic: 'sequencegenerator.sequencegenerator'

    simpledatagui:
        module.Class: 'simpledatagui.simpledatagui.SimpleDataGui'
        connect:
            simplelogic: 'simplelogic.simplelogic'

    magnetgui:
        module.Class: 'magnet.magnet_gui.MagnetGui'
        connect:
            magnetlogic1: 'magnet_logic.magnetlogic'

    gatedcountergui:
        module.Class: 'gated_counter.gated_counter_gui.GatedCounterGui'
        connect:
            gatedcounterlogic1: 'gatedcounter.counterlogic'
            traceanalysislogic1: 'trace_analysis.traceanalysislogic1'

