global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    camera_thorlabs:
        module.Class: 'camera.thorlabs_DCx.CameraThorlabs'
        min_wavelength: 359.42
        max_wavelength: 929.98

logic:

    tasklogic:
        module.Class: 'taskrunner.TaskRunner'

    savelogic:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'
        log_into_daily_directory: True

    fitlogic:
        module.Class: 'fit_logic.FitLogic'

    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'



