# Config file for a simple simulation of the core functions: Confocal, counter,
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    # Devices are defined in another config file:
    #hardware: readConfigFile('devices.cfg')
    remoteport: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qtdark.qss'

hardware:
    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fit.fitlogic'

    mydummycounter:
        module.Class: 'slow_counter_dummy.SlowCounterDummy'
        clock_channel: '/Dev1/Ctr0'
        clock_frequency: 100
        counter_channel: '/Dev1/Ctr1'
        photon_source: '/Dev1/PFI8'
        photon_source2: '/Dev1/PFI9'
        remoteaccess: True

logic:
    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
        remoteaccess: True

    counter:
        module.Class: 'counter_logic.CounterLogic'
        connect:
            counter1: 'mydummycounter.counter'
            savelogic: 'save.savelogic'

    scanner:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'mydummyscanner.confocalscanner'
            savelogic: 'save.savelogic'

    optimizer:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'mydummyscanner.confocalscanner'
            fitlogic: 'fit.fitlogic'

    poimanager:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scanner.scannerlogic'
            optimizer1: 'optimizer.optimizerlogic'
            savelogic: 'save.savelogic'

    fit:
        module.Class: 'fit_logic.FitLogic'

    save:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: '/$HOME/'


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'
    man:
        module.Class: 'manager.managergui.ManagerGui'

    countergui:
        module.Class: 'counter.countergui.CounterGui'
        connect:
            counterlogic1: 'counter.counterlogic'

    confocalgui:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scanner.scannerlogic'
            savelogic: 'save.savelogic'
            optimizerlogic1: 'optimizer.optimizerlogic'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    poimanagergui:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic1: 'poimanager.poimanagerlogic'
            confocallogic1: 'scanner.scannerlogic'
