# Config file for a simple simulation of the core functions: Confocal, counter,
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    joystick_hardware:
        module.Class: 'joystick.xinput.JoystickXInput'

    mydummyscanner:
        module.Class: 'confocal_scanner_dummy.ConfocalScannerDummy'
        clock_frequency: 100
        connect:
            fitlogic: 'fit'

logic:
    joystick_logic:
        module.Class: 'joystick_logic.JoystickLogic'
        max_fps: 100
        connect:
            hardware: 'joystick_hardware'

    connector_joystick_confocal:
        module.Class: 'logic_connectors.joystick_to_confocal.JoystickToConfocal'
        connect:
            joystick_logic: 'joystick_logic'
            confocal: 'scanner'

    connector_joystick_optimizer:
        module.Class: 'logic_connectors.joystick_to_optimizer.JoystickToOptimizer'
        connect:
            joystick_logic: 'joystick_logic'
            optimizer: optimizer

    connector_joystick_poi:
        module.Class: 'logic_connectors.joystick_to_poi.JoystickToPOI'
        connect:
            joystick_logic: 'joystick_logic'
            poi_manager: 'poimanagerlogic'

    kernellogic:
        module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'


    scanner:
        module.Class: 'confocal_logic.ConfocalLogic'
        connect:
            confocalscanner1: 'mydummyscanner'
            savelogic: 'save'

    optimizer:
        module.Class: 'optimizer_logic.OptimizerLogic'
        connect:
            confocalscanner1: 'mydummyscanner'
            fitlogic: 'fit'

    fit:
        module.Class: 'fit_logic.FitLogic'

    save:
        module.Class: 'save_logic.SaveLogic'
        win_data_directory: 'C:/Data'   # DO NOT CHANGE THE DIRECTORY HERE! ONLY IN THE CUSTOM FILE!
        unix_data_directory: 'Data/'

    poimanagerlogic:
        module.Class: 'poi_manager_logic.PoiManagerLogic'
        connect:
            scannerlogic: 'scanner'
            optimiserlogic: 'optimizer'
            savelogic: 'save'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'
    man:
        module.Class: 'manager.managergui.ManagerGui'

    confocalgui:
        module.Class: 'confocal.confocalgui.ConfocalGui'
        connect:
            confocallogic1: 'scanner'
            savelogic: 'save'
            optimizerlogic1: 'optimizer'
        fixed_aspect_ratio_xy: True
        fixed_aspect_ratio_depth: True
        slider_stepsize: 0.001  # in micrometer
        image_x_padding: 0.02
        image_y_padding: 0.02
        image_z_padding: 0.02

    poimanager:
        module.Class: 'poimanager.poimangui.PoiManagerGui'
        connect:
            poimanagerlogic: 'poimanagerlogic'
            scannerlogic: 'scanner'
